pathstacks = getDirectory("Choose 'collected-stacks' directory");
pathseq = getDirectory("Choose 'image-sequences' directory");

inputseq = pathstacks;
listseq = getFileList(pathstacks);
for (j=0; j<listseq.length; j++) {           
	action(inputseq, listseq[j]);
	function action(inputseq, filename) {
		open(inputseq + filename);
		File.makeDirectory(pathseq+filename);
		pathsaveseq = pathseq+filename+"/";
		run("Image Sequence... ", "format=TIFF name=sequence start=0 digits=4 save=pathsaveseq");
		close();
		
	}
}	


inputmeasure = pathseq;
listmeasure = getFileList(pathseq);
print("Directory list:" listmeasure);

//		for (k = 0; k<listmeasure.length; k++) {
//			action2(inputmeasure + listmeasure[k]);
//			function action2(inputmeasure, filename) {
//				open(inputmeasure + filename);
//				run("Measure");
//				close();
//			}
//		
//		}
